flatten:
    centre_x: 0.0
    centre_y: 0.0
    cleaning_cross_section: 1.0
    depth: 1.0e-05
    height: 2.5e-05
    hfw: 8.0e-05
    milling_current: 2.8e-08
    pattern: Rectangle
    rotation: 0.0
    scan_direction: LeftToRight
    width: 2.0e-06
horseshoe:
    stages:
    -   depth: 1.0e-05
        hfw: 8.0e-05
        lamella_height: 9.999999999999999e-06
        lamella_width: 4.0e-05
        milling_current: 2.8e-08
        offset: 2.0e-06
        rotation: 0.0
        scan_direction: TopToBottom
        side_offset: 0.0
        side_width: 1.5e-05
        size_ratio: 1.0
        trench_height: 1.2e-05
    -   depth: 1.0e-05
        hfw: 8.0e-05
        lamella_height: 9.999999999999999e-06
        lamella_width: 4.0e-05
        milling_current: 7.6e-09
        offset: 0.0
        rotation: 0.0
        scan_direction: TopToBottom
        side_offset: 1.5e-05
        side_width: 5.0e-07
        size_ratio: 1.0
        trench_height: 2.4999999999999998e-06
initial_position:
    landing_grid:
        coordinate_system: Raw
        x: 0.00276265
        y: 0.0039354
        z: 0.031379
    landing_tilt_angle: 32.0
    relative_beam_shift_x: 2.0e-06
    sample_grid:
        coordinate_system: Raw
        x: -0.0032375
        y: 0.0039354
        z: 0.03095
lamella_state:
    absolute_position:
        coordinate_system: Raw
        r: -2.28636643635382
        t: 0.2967058527613453
        x: 0.0023149166666666665
        y: -0.0019699166666666667
        z: 0.031954218106995884
    eb_settings:
        beam_current: 5.0e-11
        beam_type: ELECTRON
        dwell_time: 1.0e-06
        hfw: 0.00015
        resolution:
        - 1536
        - 1024
        voltage: 2000
        working_distance: 0.00391
    ib_settings:
        beam_current: 2.0e-11
        beam_type: ION
        dwell_time: 1.0e-06
        hfw: 0.00015
        resolution:
        - 1536
        - 1024
        voltage: 30000
        working_distance: 0.0165
    timestamp: 1669684862.642714
landing_state:
    absolute_position:
        coordinate_system: Raw
        r: -2.286298510029761
        t: 0.5585004974916625
        x: -0.003933166666666666
        y: -0.0023545
        z: 0.031787004886831276
    eb_settings:
        beam_current: 5.0e-11
        beam_type: ELECTRON
        dwell_time: 1.0e-06
        hfw: 0.0009
        resolution:
        - 1536
        - 1024
        voltage: 2000
        working_distance: 0.00391
    ib_settings:
        beam_current: 2.0e-11
        beam_type: ION
        dwell_time: 1.0e-06
        hfw: 0.0009
        resolution:
        - 1536
        - 1024
        voltage: 30000
        working_distance: 0.0165
    timestamp: 1669685109.759207
ml:
    encoder: resnet34
    num_classes: 3
    weights: C:\Users\pcle0002\Documents\repos\fibsem\fibsem\segmentation\models\model4.pt
name: autoliftout-auto
options:
    batch_mode: true
    confirm_advance: false
    landing_joining_method: Weld
    landing_surface: Half-Moon Grid
    liftout_contact_direction: Horizontal
    liftout_joining_method: None
    supervise:
        landing: false
        liftout: false
        polish: false
        reset: false
        thin: false
        trench: false
        undercut: false
platinum:
    application_file: cryo_Pt_dep
    beam_current: 5.0e-11
    dwell_time: 1.0e-06
    gas: Pt dep
    position: Electron Default
    rate: 3.0e-10
    spot_size: 3.0e-06
    weld:
        hfw: 0.0001
        length: 1.5e-05
        time: 30.0
    whole_grid:
        hfw: 3.0e-05
        length: 7.0e-06
        time: 30.0
polish_lamella:
    depth: 4.0e-07
    dwell_time: 2.0e-07
    hfw: 8.0e-05
    lamella_height: 5.0e-07
    lamella_width: 1.7e-05
    milling_current: 6.0e-11
    offset: 0.0
    resolution:
    - 3072
    - 2048
    rotation: 0.0
    rotation_angle: 50.0
    scan_direction: TopToBottom
    size_ratio: 1.0
    tilt_angle: 20.0
    tilt_offset: 1.0
    trench_height: 6.0e-07
sever:
    cleaning_cross_section: 0.0
    depth: 3.0e-06
    height: 1.8e-05
    hfw: 8.0e-05
    milling_current: 7.6e-09
    rotation: 0.0
    scan_direction: TopToBottom
    width: 1.0e-06
sharpen:
    bias: 2.5e-07
    cleaning_cross_section: 0.0
    depth: 9.999999999999999e-06
    height: 2.0e-06
    hfw: 0.00015
    milling_current: 2.8e-08
    needle_angle: 40.0
    rotation: 0.0
    scan_direction: TopToBottom
    tip_angle: 35.0
    width: 2.9999999999999997e-05
thin_lamella:
    depth: 4.0e-07
    dwell_time: 2.0e-07
    hfw: 5.0e-05
    lamella_height: 1.0e-06
    lamella_width: 1.8e-05
    milling_current: 7.4e-10
    offset: 1.0e-06
    resolution:
    - 3072
    - 2048
    rotation: 0.0
    rotation_angle: 49.0
    scan_direction: TopToBottom
    size_ratio: 1.0
    stages:
    -   depth: 4.0e-07
        dwell_time: 2.0e-07
        hfw: 8.0e-05
        lamella_height: 1.0e-06
        lamella_width: 1.8e-05
        milling_current: 7.4e-10
        offset: 1.0e-06
        resolution:
        - 3072
        - 2048
        rotation: 0.0
        rotation_angle: 49.0
        scan_direction: TopToBottom
        size_ratio: 1.0
        tilt_angle: 20.0
        trench_height: 4.5e-06
    -   depth: 4.0e-07
        dwell_time: 2.0e-07
        hfw: 8.0e-05
        lamella_height: 8.0e-07
        lamella_width: 1.8e-05
        milling_current: 2.0000000000000003e-10
        offset: 0.0
        resolution:
        - 3072
        - 2048
        rotation: 0.0
        rotation_angle: 49.0
        scan_direction: TopToBottom
        size_ratio: 1.0
        tilt_angle: 20.0
        trench_height: 1.5e-06
    tilt_angle: 20.0
    trench_height: 4.5e-06
undercut:
    cleaning_cross_section: 0.0
    depth: 5.5e-06
    h_offset: 4.0e-06
    height: 9.0e-06
    hfw: 8.0e-05
    milling_current: 7.6e-09
    rhs_height: 1.15e-05
    rotation: 0.0
    scan_direction: TopToBottom
    trench_width: 2.0e-06
    undercut_angle: 6.0
    width: 2.7e-05
weld:
    cleaning_cross_section: 0.0
    depth: 2.0e-07
    distance: 1.0e-06
    height: 9.999999999999999e-06
    hfw: 8.0e-05
    milling_current: 2.0e-09
    number: 3
    rotation: 0.0
    scan_direction: RightToLeft
    width: 3.0e-06
