fiducial:
  depth: 5.0e-07
  length: 1.0e-05
  milling_current: 1.0e-09
  width: 1.5e-07
lamella:
  beam_shift_attempts: 3
  protocol_stages:
  - lamella_height: 1.5e-07
    lamella_width: 2.3e-05
    milling_current: 1.0e-09
    milling_depth: 1.2e-06
    offset: 2.4585e-06
    size_ratio: 1.0
    trench_height: 4.1415e-06
  - lamella_height: 1.5e-07
    lamella_width: 2.3e-05
    milling_current: 5.0e-10
    milling_depth: 8.0e-07
    offset: 1.1934999999999999e-06
    size_ratio: 1.0
    trench_height: 1.5180000000000001e-06
  - lamella_height: 1.5e-07
    lamella_width: 2.3e-05
    milling_current: 3.0e-10
    milling_depth: 8.0e-07
    offset: 5.335e-07
    size_ratio: 1.0
    trench_height: 9.13e-07
microexpansion:
  distance: 1.5e-05
  height: 8.01e-06
  width: 1.0e-06
name: Autolamella
stage_rotation: 230
stage_tilt: 52
