options:
    name: autoliftout-serial-protocol
    method: autolamella-serial-liftout
    checkpoint: autolamella-serial-liftout-20240107.pt
    batch_mode: true
    confirm_next_stage: true
    trench_start_position: autoliftout-serial-pre-tilt-35-deg-grid-01-lamella
    landing_start_position: autoliftout-serial-pre-tilt-35-deg-grid-02-landing
    compucentric_x_offset: 0.0e-6
    compucentric_y_offset: 0.0e-6
    alignment_at_milling_current: false
    take_final_reference_images: true
    high_quality_image:
        enabled: false
        dwell_time: 2.0e-6
        resolution: [3072, 2048]
        hfw: 50.e-6
        frame_integration: 2    
    undercut_required: false
    undercut_tilt_angle: -10.0
    lamella_tilt_angle: 8.0    # absolute angle (pre-tilt - 27)
    use_fiducial: true
    use_microexpansion: false
    use_notch: false 
    landing_grid:
        x: 62.0e-6
        y: 250.0e-6
        rows: 4
        cols: 10
    supervise:
        landing: true
        liftout: true
        reset: true
        trench: true
        undercut: true
        setup_lamella: true
        mill_rough: true
        mill_polishing: true
milling:
    flatten:
        cleaning_cross_section: 1.0
        depth: 1.0e-05
        height: 2.5e-05
        hfw: 8.0e-05
        milling_current: 2.8e-08
        rotation: 0.0
        scan_direction: LeftToRight
        width: 2.0e-06
        application_file: Si
        type: "Rectangle"
        preset: "30 keV; 20 nA"
    trench:
        stages:
        -   depth: 25.0e-6
            hfw: 400.0e-06
            height: 80.0e-06
            width: 4.5e-05
            milling_current: 2.8e-08
            rotation: 0.0
            scan_direction: TopToBottom
            side_trench_width: 5.0e-06
            top_trench_height: 30.0e-6
            application_file: Si
            type: "HorseshoeVertical"
            preset: "30 keV; 20 nA"
            inverted: True
    liftout-sever:
        section_thickness: 0.0e-6
        section_width: 50.0e-6
        section_depth: 20.0e-6
        side_width: 10.0e-6
        side_depth: 40.0e-6
        side_height: 10.0e-6
        inverted: false
        use_side_patterns: false
        hfw: 400.0e-6
        milling_current: 1.0e-09
        application_file: "Si"
        type: "SerialSection"
        preset: "30 keV; 20 nA"
    undercut:
        application_file: Si
        depth: 15.0e-06
        height: 5.0e-06
        hfw: 150.0e-6
        milling_current: 28.0e-09
        preset: 30 keV; 2.5 nA
        width: 45.0e-6
        scan_direction: TopToBottom
        type: Rectangle
    liftout-weld:
        height: 2.5e-6
        width: 0.5e-6
        depth: 6.0e-6
        pitch_horizontal: 0.75e-6
        n_columns: 25
        n_rows: 1
        pitch_vertical: 0.0e-6
        rotation: 0.0
        passes: 1.0
        milling_voltage: 30.0e+3
        milling_current: 300.0e-12
        hfw: 150.0e-6
        application_file: Si-multipass
        scan_direction: "BottomToTop"
        type: "ArrayPattern"
        preset: "30 keV; 2.5 nA"
        cross_section: RegularCrossSection
    landing-weld:
        stages:
        -   height: 0.5e-6
            width: 4.0e-6
            depth: 8.0e-6
            pitch_vertical: 0.75e-6
            n_rows: 7
            n_columns: 1
            pitch_horizontal: 0
            passes: 1.0
            milling_current: 1.0e-09
            hfw: 80.0e-6
            application_file: "Si-multipass"
            scan_direction: "RightToLeft"
            type: "ArrayPattern"
            preset: "30 keV; 2.5 nA"
            cross_section: RegularCrossSection
        -   height: 0.5e-6
            width: 4.0e-6
            depth: 8.0e-6
            pitch_vertical: 0.75e-6
            n_rows: 7
            n_columns: 1
            pitch_horizontal: 0
            passes: 1.0
            milling_current: 1.0e-09
            hfw: 80.0e-6
            application_file: "Si-multipass"
            scan_direction: "LeftToRight"
            type: "ArrayPattern"
            preset: "30 keV; 2.5 nA"
            cross_section: RegularCrossSection
    landing-sever:
        section_thickness: 4.0e-6
        section_width: 50.0e-6
        section_depth: 20.0e-6
        side_width: 10.0e-6
        side_depth: 40.0e-6
        side_height: 10.0e-6
        inverted: false
        use_side_patterns: true
        hfw: 150.0e-6
        milling_current: 2.0e-09
        application_file: "Si"
        type: "SerialSection"
        preset: "30 keV; 20 nA"
    landing-thin:
        application_file: Si
        depth: 19.0e-06
        height: 20.0e-06
        hfw: 80.0e-6
        milling_current: 1.0e-09
        preset: 30 keV; 2.5 nA
        width: 5.0e-6
        scan_direction: RightToLeft
        type: Rectangle
    lamella:
        resolution:
        - 3072
        - 2048
        rotation_angle: 49.0
        dwell_time: 2.0e-07
        hfw: 8.0e-05
        tilt_angle: 35.0 # TODO: better way of doing this (52 - 35 pretilt)
        stages:
        -   application_file: Si-ccs
            cross_section: CleaningCrossSection
            depth: 2.0e-06
            hfw: 8.0e-05
            lamella_height: 6.0e-07
            lamella_width: 25.0e-6
            milling_current: 2.0e-09
            offset: 2.0e-06
            preset: 30 keV; 2.5 nA
            size_ratio: 1.0
            trench_height: 0.5e-05
            type: "Trench"
        -   application_file: Si-ccs
            cross_section: CleaningCrossSection
            depth: 1.0e-06
            hfw: 8.0e-05
            lamella_height: 6.0e-07
            lamella_width: 25.0e-6
            milling_current: 7.4e-10
            offset: 5.0e-07
            preset: 30 keV; 1 nA
            size_ratio: 1.0
            trench_height: 2.0e-06
            type: "Trench"
        -   application_file: Si-ccs
            cross_section: CleaningCrossSection
            depth: 4.0e-07
            hfw: 8.0e-05
            lamella_height: 6.0e-07
            lamella_width: 25.0e-6
            milling_current: 6.0e-11
            offset: 0.0
            preset: 30 keV; 50 pA
            size_ratio: 1.0
            trench_height: 6.0e-07
            type: "Trench"
    fiducial:
        application_file: Si
        depth: 4.0e-06
        height: 1.0e-05
        hfw: 8.0e-05
        milling_current: 7.6e-09
        preset: 30 keV; 20 nA
        rotation: 45
        width: 1.0e-06
        type: "Fiducial"
    prepare-manipulator:
        stages:
        -   application_file: Si
            hfw: 0.00015
            milling_current: 28.0e-9
            milling_voltage: 30000
            type: Rectangle
            width: 25.0e-6
            height: 2.50e-6
            depth: 10.0e-6  
    prepare-copper-grid:
        stages:
        -   application_file: Si
            hfw: 0.00015
            milling_current: 28.0e-9
            milling_voltage: 30000
            type: Rectangle
            width: 100.0e-6
            height: 5.0e-6
            depth: 30.0e-6
    prepare-copper-blocks:
        stages:
        -   application_file: Si
            hfw: 150.0e-6
            milling_current: 28.0e-9
            milling_voltage: 30000
            depth: 10.0e-6
            pitch_horizontal: 30.0e-6
            height: 20.0e-6
            width: 10.0e-6
            type: ArrayPattern
            n_columns: 4.0
            n_rows: 1.0
            pitch_vertical: 0.0
            scan_direction: TopToBottom
        -   application_file: Si
            hfw: 0.00015
            milling_current: 28.0e-9
            milling_voltage: 30000
            type: Rectangle
            width: 100.0e-6
            height: 7.50e-6
            depth: 10.0e-6
    prepare-copper-weld:
        stages:
        -   height: 2.5e-6
            width: 0.5e-6
            depth: 4.0e-6
            pitch_horizontal: 1.0e-6
            n_columns: 15
            n_rows: 1
            pitch_vertical: 0.0e-6
            rotation: 0.0
            passes: 1.0
            milling_voltage: 30.0e+3
            milling_current: 300.0e-12
            hfw: 150.0e-6
            application_file: "Si-multipass"
            scan_direction: "TopToBottom"
            type: "ArrayPattern"
            preset: "30 keV; 2.5 nA"
            cross_section: RegularCrossSection
    prepare-copper-release:
        stages:
        -   application_file: Si
            hfw: 150.0e-6
            milling_current: 28.0e-9
            milling_voltage: 30000
            depth: 10.0e-6
            pitch_horizontal: 30.0e-6
            height: 20.0e-6
            width: 5.0e-6
            type: ArrayPattern
            n_columns: 2.0
            n_rows: 1.0
            pitch_vertical: 0.0
            scan_direction: TopToBottom