cut:
  cleaning_cross_section: 0.0
  depth: 2.5e-05
  height: 1.5e-05
  milling_current: 2.0e-09
  rotation: 0.0
  scan_direction: BottomToTop
  width: 5.0e-07
fiducial:
  cleaning_cross_section: 0.0
  depth: 5.0e-06
  height: 1.4999999999999999e-05
  milling_current: 7.6e-09
  rotation: 0.0
  scan_direction: TopToBottom
  width: 2.5e-07
flatten_landing:
  cleaning_cross_section: 1.0
  depth: 1.0e-05
  height: 2.5e-05
  milling_current: 2.8e-08
  scan_direction: LeftToRight
  width: 2.0e-06
initial_position:
  landing_grid:
    coordinate_system: Raw
    x: 0.00276265
    y: 0.0039354
    z: 0.031379
  landing_tilt_angle: 32.0
  relative_beam_shift_x: 6.5e-06
  sample_grid:
    coordinate_system: Raw
    x: -0.0032375
    y: 0.0039354
    z: 0.03095
jcut:
  cleaning_cross_section: 0.0
  depth: 5.0e-06
  h_offset: 4.0e-06
  jcut_angle: 6.0
  lamella_height: 9.0e-06
  milling_current: 7.6e-09
  rhs_height: 1.05e-05
  rotation: 0.0
  scan_direction: TopToBottom
  trench_width: 1.5e-06
  width: 2.7e-05
lamella:
  cleaning_cross_section: 0.0
  lamella_height: 9.999999999999999e-06
  lamella_width: 4.0e-05
  milling_current: 2.8e-08
  milling_depth: 1.0e-05
  offset: 2.0e-06
  protocol_stages:
  - cleaning_cross_section: 0.0
    lamella_height: 9.999999999999999e-06
    lamella_width: 4.0e-05
    milling_current: 2.8e-08
    milling_depth: 1.0e-05
    offset: 2.0e-06
    rotation: 0.0
    scan_direction: TopToBottom
    side_offset: 0.0
    side_width: 1.5e-05
    size_ratio: 1.0
    trench_height: 9.999999999999999e-06
  - cleaning_cross_section: 0.0
    lamella_height: 9.999999999999999e-06
    lamella_width: 4.0e-05
    milling_current: 7.6e-09
    milling_depth: 1.0e-05
    offset: 0.0
    rotation: 0.0
    scan_direction: TopToBottom
    side_offset: 1.5e-05
    side_width: 5.0e-07
    size_ratio: 1.0
    trench_height: 2.4999999999999998e-06
  rotation: 0.0
  scan_direction: TopToBottom
  side_offset: 0.0
  side_width: 8.0e-06
  size_ratio: 1.0
  trench_height: 9.999999999999999e-06
# lamella:
#   cleaning_cross_section: 0.0
#   lamella_height: 9.999999999999999e-06
#   lamella_width: 3.0e-05
#   milling_current: 2.8e-08
#   milling_depth: 1.0e-05
#   offset: 2.0e-06
#   protocol_stages:
#   - cleaning_cross_section: 0.0
#     lamella_height: 9.999999999999999e-06
#     lamella_width: 3.0e-05
#     milling_current: 2.0e-09
#     milling_depth: 1.5e-6
#     offset: 2.0e-06
#     rotation: 0.0
#     scan_direction: TopToBottom
#     side_offset: 0.0
#     side_width: 1.5e-05
#     size_ratio: 1.0
#     trench_height: 4.0e-6
#   - cleaning_cross_section: 0.0
#     lamella_height: 9.999999999999999e-06
#     lamella_width: 3.0e-05
#     milling_current: 2.0e-09
#     milling_depth: 1.0e-06
#     offset: 0.0
#     rotation: 0.0
#     scan_direction: TopToBottom
#     side_offset: 1.5e-05
#     side_width: 5.0e-07
#     size_ratio: 1.0
#     trench_height: 2.4999999999999998e-06
#   rotation: 0.0
#   scan_direction: TopToBottom
#   side_offset: 0.0
#   side_width: 8.0e-06
#   size_ratio: 1.0
#   trench_height: 9.999999999999999e-06
lamella_state:
  absolute_position:
    coordinate_system: Raw
    r: -2.28636643635382
    t: 0.2967058527613453
    x: 0.0023149166666666665
    y: -0.0019699166666666667
    z: 0.031954218106995884
  eb_settings:
    beam_current: 5.0e-11
    beam_type: ELECTRON
    dwell_time: 1.0e-06
    hfw: 0.00015
    resolution: 1536x1024
    working_distance: 0.00391
  ib_settings:
    beam_current: 2.0e-11
    beam_type: ION
    dwell_time: 1.0e-06
    hfw: 0.00015
    resolution: 1536x1024
    working_distance: 0.0165
  timestamp: 1669684862.642714
landing_state:
  absolute_position:
    coordinate_system: Raw
    r: -2.286298510029761
    t: 0.5585004974916625
    x: -0.003933166666666666
    y: -0.0023545
    z: 0.031787004886831276
  eb_settings:
    beam_current: 5.0e-11
    beam_type: ELECTRON
    dwell_time: 1.0e-06
    hfw: 0.0009
    resolution: 1536x1024
    working_distance: 0.00391
  ib_settings:
    beam_current: 2.0e-11
    beam_type: ION
    dwell_time: 1.0e-06
    hfw: 0.0009
    resolution: 1536x1024
    working_distance: 0.0165
  timestamp: 1669685109.759207
ml:
  cuda: 0.0
  encoder: resnet34
  num_classes: 3.0
  weights: C:\Users\Admin\Github\fibsem\fibsem\segmentation\models\model4.pt
name: autoliftout
options:
  auto:
    jcut: Manual
    landing: Manual
    liftout: Manual
    polish: Manual
    reset: Manual
    thin: Manual
    trench: Manual
  batch_mode: 1.0
  confirm_advance: 1.0
  landing_joining_method: Weld
  landing_removal_method: None
  landing_surface: Half-Moon Grid
  liftout_contact_direction: Horizontal
  liftout_joining_method: None
platinum:
  application_file: cryo_Pt_dep
  gas: Pt cryo
  position: cryo
  weld:
    hfw: 0.0001
    length: 1.5e-05
    time: 30.0
  whole_grid:
    hfw: 3.0e-05
    length: 7.0e-06
    time: 30.0
polish_lamella:
  cleaning_cross_section: false
  dwell_time: 2.0e-07
  hfw: 5.0e-05
  lamella_height: 5.0e-07
  lamella_width: 1.7e-05
  milling_current: 6.0e-11
  milling_depth: 4.0e-07
  offset: 0.0
  resolution: 3072x2048
  rotation: 0.0
  rotation_angle: 50.0
  scan_direction: TopToBottom
  size_ratio: 1.0
  tilt_angle: 20.0
  tilt_offset: 1.0
  trench_height: 6.0e-07
sever:
  cleaning_cross_section: 0.0
  depth: 3.0e-06
  height: 1.4999999999999999e-05
  milling_current: 7.6e-09
  rotation: 0.0
  scan_direction: TopToBottom
  width: 1.0e-06
sharpen:
  bias: 2.5e-07
  cleaning_cross_section: 0.0
  depth: 9.999999999999999e-06
  height: 2.0e-06
  hfw: 0.00015
  milling_current: 2.8e-08
  needle_angle: 40.0
  rotation: 0.0
  scan_direction: TopToBottom
  tip_angle: 35.0
  width: 2.9999999999999997e-05
thin_lamella:
  cleaning_cross_section: 1.0
  dwell_time: 2.0e-07
  hfw: 5.0e-05
  lamella_height: 1.0e-06
  lamella_width: 1.8e-05
  milling_current: 7.4e-10
  milling_depth: 4.0e-07
  offset: 1.0e-06
  protocol_stages:
  - cleaning_cross_section: 1.0
    dwell_time: 2.0e-07
    hfw: 5.0e-05
    lamella_height: 1.0e-06
    lamella_width: 1.8e-05
    milling_current: 7.4e-10
    milling_depth: 4.0e-07
    offset: 1.0e-06
    resolution: 3072x2048
    rotation: 0.0
    rotation_angle: 49.0
    scan_direction: TopToBottom
    size_ratio: 1.0
    tilt_angle: 20.0
    trench_height: 4.5e-06
  - cleaning_cross_section: 1.0
    dwell_time: 2.0e-07
    hfw: 5.0e-05
    lamella_height: 8.0e-07
    lamella_width: 1.8e-05
    milling_current: 2.0000000000000003e-10
    milling_depth: 4.0e-07
    offset: 0.0
    resolution: 3072x2048
    rotation: 0.0
    rotation_angle: 49.0
    scan_direction: TopToBottom
    size_ratio: 1.0
    tilt_angle: 20.0
    trench_height: 1.5e-06
  resolution: 3072x2048
  rotation: 0.0
  rotation_angle: 49.0
  scan_direction: TopToBottom
  size_ratio: 1.0
  tilt_angle: 20.0
  trench_height: 4.5e-06
weld:
  cleaning_cross_section: 0.0
  depth: 2.0e-07
  height: 9.999999999999999e-06
  milling_current: 2.0e-09
  rotation: 0.0
  scan_direction: RightToLeft
  width: 3.0e-06
