options:
  name: autolamella-odemis-on-grid
  method: autolamella-on-grid
  checkpoint: autolamella-mega-20240107.pt
  alignment_attempts: 3.0
  alignment_at_milling_current: false
  take_final_reference_images: true 
  lamella_tilt_angle: 16.0
  num_polishing_stages: 2
  use_fiducial: false
  use_microexpansion: true
  use_notch: false 
  supervise:
    trench: false
    undercut: true
    setup_lamella: true
    features: true
    lamella: true
    mill_rough: true
    mill_regular: true
    mill_polishing: true
milling:
  lamella:
    stages:
      -   application_file: Si-ccs
          cross_section: CleaningCrossSection
          depth: 6.5e-07
          dwell_time: 1.0e-06
          hfw: 50.0e-06
          lamella_height: 6.0e-07
          lamella_width: 10.0e-06
          milling_current: 7.4e-10
          offset: 2.0e-06
          patterning_mode: Serial
          preset: ''
          rate: 0.0001
          size_ratio: 1.0
          spot_size: 5.0e-08
          trench_height: 3.5e-06
          name: Rough Cut 01
      -   application_file: Si-ccs
          cross_section: CleaningCrossSection
          depth: 6.5e-07
          dwell_time: 1.0e-06
          hfw: 50.0e-06
          lamella_height: 6.0e-07
          lamella_width: 9.5e-06
          milling_current: 2.0e-10
          offset: 5.0e-07
          patterning_mode: Serial
          preset: ''
          rate: 0.0001
          size_ratio: 1.0
          spot_size: 5.0e-08
          trench_height: 2.0e-06
          name: Rough Cut 02
      -   application_file: Si-ccs
          cross_section: CleaningCrossSection
          depth: 4.0e-07
          dwell_time: 1.0e-06
          hfw: 50.0e-6
          lamella_height: 450.0e-9
          lamella_width: 9.0e-06
          milling_current: 6.0e-11
          offset: 0.0
          patterning_mode: Serial
          size_ratio: 1.0
          trench_height: 7.0e-07
          name: Polishing Cut 01
      -   application_file: Si-ccs
          cross_section: CleaningCrossSection
          depth: 4.0e-07
          dwell_time: 1.0e-06
          hfw: 50.0e-6
          lamella_height: 300.0e-9
          lamella_width: 9.0e-06
          milling_current: 6.0e-11
          offset: 0.0
          patterning_mode: Serial
          size_ratio: 1.0
          trench_height: 2.5e-07
          name: Polishing Cut 02
  microexpansion:
    width: 0.5e-6
    height: 18.e-6
    depth: 1.0e-6
    distance: 10.e-6  # distance between micoexpansion and lamella centre
    milling_current: 2.e-9
    hfw: 200e-6
    application_file: Si
    type: MicroExpansion