milling:
    undercut:
        stages:
        -   application_file: Si
            depth: 1.2e-06
            height: 16.0e-06
            hfw: 8.0e-05
            milling_current: 7.6e-09
            preset: 30 keV; 2.5 nA
            width: 22.0e-6
            type: Rectangle
        -   application_file: Si
            depth: 1.2e-06
            height: 8.0e-06
            hfw: 8.0e-05
            milling_current: 7.6e-09
            preset: 30 keV; 2.5 nA
            width: 22.0e-6
            type: Rectangle
        -   application_file: Si
            depth: 1.2e-06
            height: 4.0e-06
            hfw: 8.0e-05
            milling_current: 2.0e-09
            preset: 30 keV; 2.5 nA
            width: 22.0e-6
            type: Rectangle
    fiducial:
        application_file: Si
        depth: 1.5e-06
        enabled: true
        height: 1.0e-05
        hfw: 8.0e-05
        milling_current: 7.6e-09
        passes: null
        preset: 30 keV; 20 nA
        rotation: 45
        width: 1.0e-06
        type: Fiducial
    lamella:
        stages:
        -   application_file: Si-ccs
            cross_section: CleaningCrossSection
            depth: 2.0e-06
            hfw: 8.0e-05
            lamella_height: 5.0e-07
            lamella_width: 14.0e-6
            milling_current: 2.0e-09
            offset: 2.0e-06
            preset: 30 keV; 2.5 nA
            size_ratio: 1.0
            trench_height: 5.0e-06
            type: Trench
            name: Rough Milling
        -   application_file: Si-ccs
            cross_section: CleaningCrossSection
            depth: 1.0e-06
            hfw: 8.0e-05
            lamella_height: 5.0e-07
            lamella_width: 1.4e-05
            milling_current: 7.4e-10
            offset: 5.0e-07
            preset: 30 keV; 1 nA
            size_ratio: 1.0
            trench_height: 2.0e-06
            type: Trench
            name: Regular Milling
        -   application_file: Si-ccs
            cross_section: CleaningCrossSection
            depth: 4.0e-07
            hfw: 8.0e-05
            lamella_height: 4.5e-07
            lamella_width: 1.4e-05
            milling_current: 6.0e-11
            offset: 0.0
            preset: 30 keV; 50 pA
            size_ratio: 1.0
            trench_height: 6.0e-07
            type: Trench
            name: Polish Milling
    notch:
        application_file: Si
        depth: 2.5e-06
        distance: 2.0e-06
        enabled: true
        flip: 0
        hfw: 80e-6
        hheight: 2.0e-07
        hwidth: 4.0e-06
        milling_current: 2.0e-09
        preset: 30 keV; 2.5 nA
        vheight: 2.0e-06
        vwidth: 2.0e-07
        type: WaffleNotch
    trench:
        application_file: Si
        depth: 1.25e-06
        hfw: 0.00018
        lamella_height: 2.5e-05
        lamella_width: 2.2e-05
        milling_current: 7.6e-09
        milling_voltage: 30000
        offset: 0.0
        preset: 30 keV; 2.5 nA
        size_ratio: 2.0
        trench_height: 3.2e-05
        type: Trench
    microexpansion:
        width: 0.5e-6
        height: 18.e-6
        depth: 1.0e-6
        distance: 10.e-6  # distance between micoexpansion and lamella centre
        milling_current: 2.e-9
        preset: "30 keV; 2.5 nA" # TESCAN only
        hfw: 200e-6
        application_file: Si
        type: MicroExpansion
options:
    name: autolamella-waffle-scan-rotation-0deg-multi-undercut
    method: autolamella-waffle
    checkpoint: autolamella-waffle-20240107.pt
    alignment_attempts: 3.0
    alignment_at_milling_current: false
    take_final_reference_images: true
    high_quality_image:
        enabled: false
        dwell_time: 2.0e-6
        resolution: [3072, 2048]
        hfw: 50.e-6
        frame_integration: 2    
    take_final_overview_image: true
    compucentric_x_offset: 0.0e-6
    compucentric_y_offset: 0.0e-6
    undercut_tilt_angle: -5.0
    undercut_tilt_angle_steps: 2.0
    lamella_tilt_angle: 18.0
    use_notch: true
    use_microexpansion: false
    use_fiducial: true 
    supervise:
        setup_lamella: true
        trench: true
        undercut: true
        mill_rough: true
        mill_polishing: true

