MillUndercut:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: false
        depth: 2.5e-06
        height: 16.0e-06
        hfw: 8.0e-05
        milling_current: 7.6e-09
        preset: 30 keV; 2.5 nA
        tilt_angle: -5.0
        tilt_angle_step: 2.0
        width: 22.0e-6
        type: Rectangle
fiducial:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: false
        depth: 1.5e-06
        enabled: true
        height: 1.0e-05
        hfw: 8.0e-05
        milling_current: 7.6e-09
        passes: null
        preset: 30 keV; 20 nA
        rotation: 45
        width: 1.0e-06
        type: Fiducial
lamella:
    alignment_current: Imaging Current
    beam_shift_attempts: 3.0
#     lamella_height: 8.0e-07
#     lamella_width: 1.0e-05
#     stages:
#     -   application_file: autolamella
#         cleaning_cross_section: true
#         depth: 2.0e-06
#         hfw: 8.0e-05
#         lamella_height: 6.5e-07
#         lamella_width: 14.0e-6
#         milling_current: 2.0e-09
#         offset: 2.0e-06
#         preset: 30 keV; 2.5 nA
#         size_ratio: 1.0
#         trench_height: 5.0e-06
#         type: Trench
#     -   application_file: autolamella
#         cleaning_cross_section: true
#         depth: 1.0e-06
#         hfw: 8.0e-05
#         lamella_height: 6.5e-07
#         lamella_width: 1.4e-05
#         milling_current: 7.4e-10
#         offset: 5.0e-07
#         preset: 30 keV; 1 nA
#         size_ratio: 1.0
#         trench_height: 2.0e-06
#         type: Trench
#     -   application_file: autolamella
#         cleaning_cross_section: true
#         depth: 4.0e-07
#         hfw: 8.0e-05
#         lamella_height: 6.5e-07
#         lamella_width: 1.4e-05
#         milling_current: 6.0e-11
#         offset: 0.0
#         preset: 30 keV; 50 pA
#         size_ratio: 1.0
#         trench_height: 6.0e-07
#         type: Trench
microexpansion:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: false
        depth: 1.0e-06
        distance: 1.0e-05
        height: 1.8e-05
        hfw: 200e-6
        lamella_width: 1.0e-05
        milling_current: 2.0e-09
        preset: 30 keV; 2.5 nA
        width: 5.0e-07
        type: MicroExpansion
notch:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: false
        depth: 2.5e-06
        distance: 2.0e-06
        enabled: true
        flip: 0
        hfw: 80e-6
        hheight: 2.0e-07
        hwidth: 4.0e-06
        milling_current: 2.0e-09
        preset: 30 keV; 2.5 nA
        vheight: 2.0e-06
        vwidth: 2.0e-07
        type: WaffleNotch
name: autolamella-waffle-scan-rotation-0deg
options:
    method: waffle
    ml:
        encoder: resnet34
        num_classes: 3
        checkpoint: autolamella-05-34.pt
    compucentric_x_offset: 50.0e-6
    compucentric_y_offset: 25.0e-6 
    supervise:
        features: false
        setup_lamella: true
        trench: true
        undercut: true
        mill_rough: false
        mill_regular: false
        mill_polishing: true
trench:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: false
        depth: 3.0e-06
        hfw: 0.00018
        lamella_height: 2.5e-05
        lamella_width: 2.2e-05
        milling_current: 7.6e-09
        offset: 0.0
        preset: 30 keV; 2.5 nA
        size_ratio: 2.0
        trench_height: 3.2e-05
        type: Trench
MillRoughCut:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: true
        depth: 2.0e-06
        hfw: 8.0e-05
        lamella_height: 6.5e-07
        lamella_width: 14.0e-6
        milling_current: 2.0e-09
        offset: 2.0e-06
        preset: 30 keV; 2.5 nA
        size_ratio: 1.0
        trench_height: 5.0e-06
        type: Trench
MillRegularCut:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: true
        depth: 1.0e-06
        hfw: 8.0e-05
        lamella_height: 6.5e-07
        lamella_width: 1.4e-05
        milling_current: 7.4e-10
        offset: 5.0e-07
        preset: 30 keV; 1 nA
        size_ratio: 1.0
        trench_height: 2.0e-06
        type: Trench
MillPolishingCut:
    stages:
    -   application_file: autolamella
        cleaning_cross_section: true
        depth: 4.0e-07
        hfw: 8.0e-05
        lamella_height: 6.5e-07
        lamella_width: 1.4e-05
        milling_current: 6.0e-11
        offset: 0.0
        preset: 30 keV; 50 pA
        size_ratio: 1.0
        trench_height: 6.0e-07
        type: Trench