fiducial:
  depth: 5.0e-07
  length: 6.0e-06
  milling_current: 2.0e-10
  width: 8.0e-07
lamella:
  beam_shift_attempts: 3
  lamella_height: 5.5e-07
  lamella_width: 8.0e-06
  protocol_stages:
  - milling_current: 7.4e-10
    milling_depth: 1.8e-06
    offset: 2.0000000000000003e-06
    size_ratio: 1.0
    trench_height: 3.5e-06
  - milling_current: 2.0e-10
    milling_depth: 1.3e-06
    offset: 1.0000000000000002e-06
    size_ratio: 1.0
    trench_height: 1.5e-06
  - milling_current: 6.0e-11
    milling_depth: 1.0e-06
    offset: 0.0
    size_ratio: 1.0
    trench_height: 1.5e-06
microexpansion:
  distance: 7.5e-06
  height: 6.9300000000000006e-06
  width: 1.0e-06
name: Autolamella_Bacteria
stage_rotation: 230
stage_tilt: 52
application_file: autolamella

