
name: autolamella_demo
stage_rotation: 230
stage_tilt: 52

fiducial:
  length: 5.e-6
  width: 1.e-6
  depth: 100.e-9
  milling_current: 3.e-10

lamella:
  beam_shift_attempts: 3
  protocol_stages:
  - lamella_width: 10.e-6
    lamella_height: 5.e-6
    trench_height: 10.e-6
    milling_depth: 2.e-6
    offset: 5.e-6
    size_ratio: 1.0
    milling_current: 2.e-9
  - lamella_width: 10.e-6
    lamella_height: 5.e-6
    trench_height: 2.e-6
    milling_depth: 2.e-6
    offset: 1.e-6
    size_ratio: 1.0
    milling_current: 2.e-9
  - lamella_width: 10.e-6
    lamella_height: 5.e-6
    trench_height: 1.e-6
    milling_depth: 2.e-6
    offset: 0.e-6
    size_ratio: 1.0
    milling_current: 2.e-9
